PsychoPy2experiment version="2020.1.3"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = norm
  Window size (pixels) = [1920, 1080]
  expName = MoralCognition
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Routines
  Routine Likert_Scale
    TextComponent LikertScaleText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text [set every repeat]:
        To what extent is this action morally acceptable?

        1 being completely acceptable to 7 being completely unacceptable.



        Click the number to rate acceptability, then click the number below to confirm your response.
    RatingScaleComponent rating
      forceEndRoutine = True
      high = 7
      low = 1
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine trial
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent storytime
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 120.0
      text [set every repeat] = $intentstory
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    KeyboardComponent forceend_storytime
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 120.0
      store = nothing
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  Routine intentq
    TextComponent deonticjudgment
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $djquestion
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    TextComponent YESORNO
      letterHeight = 0.1
      pos = [0, -.3]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = YES (Y)			NO (N)
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    KeyboardComponent djresp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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  Routine Instructions
    TextComponent Instruct
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
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      text:
        You will be presented with a series of narratives about random bystanders.

        For each narrative, once you are finished reading the story, press spacebar to bring up the response pages.

        You will first be asked to rate whether one of the bystander's possible actions is morally acceptable or not. Click "Y" for Yes or "N" for No.

        In addition, you will be asked to rate how morally acceptable the bystander's action is from 1 to 7: 1 being completely acceptable to 7 completely unacceptable. Type in the number, and then click on the box with your number in it.

        The next trial will start automatically after you click on the box.

        Press space once you finish reading these instructions.
    KeyboardComponent forceend_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
      store = nothing
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = mc_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'intentstory': 'Ian receives a communication that a cargo ship has an insect with a highly contagious disease. The captain himself is immune to the disease, but anybody who comes into contact with the insect will die. No passengers are on the ship. The ship is headed for a remote island where the captain will deliver the cargo to the five islanders. The captain does not know that there is a disease-carrying insect in the cargo and has no radio on board to receive a warning. Ian takes off in a helicopter to intercept the ship, but from a distance he sees the ship about to dock. Ian can shoot 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,
      {'intentstory': 'Connor is at a new aquarium exhibit when he sees a visit slip on a wet flower, fall down, and break his neck. The visitor is still alive and can be safely evacuated by medics so long as he is not moved. He has fallen, however, on top of the oxygen supply line servicing five other visitors in an underwater observation pod. Without oxygen, the five visits will soon die. If Connor does nothing the one visitor will be safely evacuated, but the five visitors in the pod will die. If Connor pushes the one visit off the supply line, the one visitor will die, but the five visitors in t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,
      {'intentstory': 'Rick is a fireman trying to help five children out of a burning house. There is only one window from which the children can be safely evacuated, and it is jammed shut. Rick must immediately smash open this large, heavy window or else all five children will die. Outside the window, on the sill, is a man safely awaiting evacuation who Rick cannot help hitting with his fists if he breaks the window, causing the man to fall off the sill. Falling off the silly is certain to kill the man. If Rick breaks open the window, he will hit the man with his fist, the man will fall off, and h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,
      {'intentstory': 'Fred is working on the top floor of a construction project when he sees a gearbox at the end of a steel beam about to break. Suspended from the gearbox is an elevated platform with five workers on it, and if the gearbox breaks, the five workers will fall to their deaths. Fred can save the five if he rushes across the steel beam immediately to engage the backup mechanism on the gearbox. In between Fred and the gearbox, there is a worker standing on the beam. Fred knows that if he rushes across the narrow beam, he is certain to bump into the other worker, causing this worker to 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
    Routine trial
    Routine intentq
    Routine Likert_Scale
  LoopTerminator trials
